PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Project01
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine introduce
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    TextComponent introduce_text_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        안녕하세요.

        이 실험은 단어와 문장 기억률에 대한 실험입니다.
        모니터에 제시된 단어와 문장을
        최대한 기억해주시면 됩니다.

        'space'를 눌러주세요.
    KeyboardComponent press_space_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduce2
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    TextComponent introduce_text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        본 실험에서는 다음의 목적으로 개인정보를 수집 및 활용하고자 합니다.
        아래 내용을 충분히 숙지하신 후 동의 여부를 결정해 주시기 바랍니다.

        -개인정보 수집 항목
        이름, 성별, 나이, 기타 실험에 필요한 정보

        -수집 및 이용 목적
        연구 및 실험 데이터 분석
        연구 결과의 통계 처리 및 보고

        -보유 및 이용 기간
        실험 종료 후 2개월간 보관 후 폐기

        -제3자 제공 여부
        수집된 정보는 실험 목적 외에는 사용되지 않으며, 제3자에게 제공되지 않습니다.

        -동의 거부권 및 불이익
        본 안내에 동의하지 않으실 경우, 실험 참여가 제한될 수 있습니다.
        동의 여부는 자율적이며, 동의하지 않더라도 별도의 불이익은 없습니다.

        동의하신다면 'space'를 눌러주세요.
    KeyboardComponent press_space_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine train1
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    ImageComponent black_word_1
      image = 프레젠테이션/Slide1.jpg
      size = (1.2, 0.9)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent black_word_2
      image = 프레젠테이션/Slide2.jpg
      size = (1.2, 0.9)
      startVal [time (s)] = 12
      stopVal [duration (s)] = 10
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  Routine test1
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    TextComponent test1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $문제
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    KeyboardComponent test1_key_resp_2
      allowedKeys [set every repeat] = 'o','x'
      correctAns = $정답
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine train2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $문장
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  Routine test2
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    TextComponent test2_text_1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $문제
    TextComponent test2_text_2
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $보기
    KeyboardComponent test2_key_resp
      allowedKeys [set every repeat] = '1','2','3'
      correctAns = $정답
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine ending
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 실험에 참여해주셔서 감사합니다.
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  Routine pre_test1
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    ImageComponent pre_test1_image
      image = 01.png
      pos = (0,0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent pre_test1_key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      correctAns = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent pre_test1_text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        본 실험을 시작하기 전 피험자의 색맹을 검사하기 위한 예비 실험입니다.

        화면에 보이는 숫자를 눌러주시면 됩니다.
  Routine pre_test2
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    ImageComponent pre_test2_image
      image = 02.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent pre_test2_key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      correctAns = 8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent pre_test2_text
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        본 실험을 시작하기 전 피험자의 색맹을 검사하기 위한 예비 실험입니다.

        화면에 보이는 숫자를 눌러주시면 됩니다.
  Routine introduce4
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        지금부터는 문장 테스트가 시작됩니다.
        한 문장당 2초 제시 후 자동으로 다음 문장으로 넘어갑니다.

        문장을 최대한 외워주신 후 10개의 문장이 제시된 후에 나타나는
        화면에서 알맞은 답을 선택해주시면 됩니다.

        'space'를 눌러주세요.
    KeyboardComponent press_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine introduce3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        지금부터는 단어 테스트가 시작됩니다.
        10초동안 10개의 단어가 한 화면에 제시됩니다.

        단어를 최대한 외워주신 후 알맞은 답을 O/X로 선택해주시면 됩니다.

        'space'를 눌러주세요.
    KeyboardComponent press_space_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine introduce
  Routine introduce2
  Routine pre_test1
  Routine pre_test2
  Routine introduce3
  Routine train1
  LoopInitiator testing1 loopType="TrialHandler"
    conditionsFile = test1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'문제': "'미합' 이라는 단어가 있었습니까?", '정답': 'o'},
      {'문제': "'얄붐' 이라는 단어가 있었습니까?", '정답': 'o'},
      {'문제': "'코라' 이라는 단어가 있었습니까?", '정답': 'x'},
      {'문제': "'마도' 이라는 단어가 있었습니까?", '정답': 'x'},
      {'문제': "'찡로' 이라는 단어가 있었습니까?", '정답': 'o'},
      {'문제': "'리모' 이라는 단어가 있었습니까?", '정답': 'x'},
      {'문제': "'돼치' 이라는 단어가 있었습니까?", '정답': 'o'},
      {'문제': "푸네' 이라는 단어가 있었습니까?", '정답': 'x'},
      {'문제': "'솔프' 이라는 단어가 있었습니까?", '정답': 'x'},
      {'문제': "'달춤' 이라는 단어가 있었습니까?", '정답': 'o'}]
    Routine test1
  LoopTerminator testing1
  Routine introduce4
  LoopInitiator training1 loopType="TrialHandler"
    conditionsFile = train2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'문장': '꽃초롱 불 밝히듯 눈을 밝힐까'},
      {'문장': '햇살도 둥글둥글하게 뭉치는 맑은 날'},
      {'문장': '넓음과 깊음을 가슴에 채우며'},
      {'문장': '흙에서 자란 내 마음 파아란 하늘빛'},
      {'문장': '큰 바다 넓은 하늘을 우리는 가졌노라'},
      {'문장': '그대만큼 사랑스러운 사람을 본 일이 없다'},
      {'문장': '너무 맑고 초롱한 그 중 하나 별이여'},
      {'문장': '많고 많은 사람 중에 그대 한 사람'},
      {'문장': '넓은 하늘로의 비상을 꿈꾸며'},
      {'문장': '나의 꿈은 맑은 바람이 되어서'},
      {'문장': '가장 넓은 길은 언제나 내 마음속에'}]
    Routine train2
  LoopTerminator training1
  LoopInitiator testing2 loopType="TrialHandler"
    conditionsFile = test2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'문제': 'OOO 불 밝히듯 눈을 밝힐까', '보기': '1. 화려한 2. 투명한 3. 꽃초롱', '정답': 3},
      {'문제': 'OO도 둥글둥글하게 뭉치는 맑은 날', '보기': '1. 햇빛  2. 햇살 3. 하늘', '정답': 2},
      {'문제': '넓음과 깊음을 가슴에 OOO', '보기': '1. 채우며 2. 새기며 3. 피우며', '정답': 1},
      {'문제': '흙에서 자란 내 마음 파아란 OOO', '보기': '1. 하늘빛 2. 푸른빛 3. 창공빛', '정답': 1},
      {'문제': '큰 바다 OO OO을 우리는 가졌노라', '보기': '1. 푸른 하늘, 2. 넓은 하늘, 3. 맑은 하늘 ', '정답': 2},
      {'문제': '그대만큼 사랑스러운 사람을 O OO 없다', '보기': '1. 본 적이 2. 본 일이 3. 볼 수가', '정답': 2},
      {'문제': '너무 맑고 OOO 그 중 하나 별이여', '보기': '1. 초롱한 2. 청량한 3. 빛나는', '정답': 1},
      {'문제': 'OO OO 사람 중에 그대 한 사람', '보기': '1. 많고 많은 2. 함께 하는 3. 걸음 하는', '정답': 1},
      {'문제': '넓은 하늘로의 OO을 꿈꾸며', '보기': '1. 비상 2. 오늘 3. 내일', '정답': 1},
      {'문제': '나의 꿈은 OO 바람이 되어서', '보기': '1. 항상 2. 거센 3. 맑은', '정답': 3},
      {'문제': '가장 넓은 OO 언제나 내 마음속에', '보기': '1. 것은 2. 길은 3. 아량', '정답': 2}]
    Routine test2
  LoopTerminator testing2
  Routine ending
